PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['姓名'], expName, expInfo['date'])
  Experiment info = {'姓名': '王小明', '電話': '0900-012-345', '電子郵件': 'yourEmail@google.com'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/grid.png', 'stimuli/instructions1.png', 'stimuli/instructions2.png', 'stimuli/instructions3.png', 'stimuli/instructions4.png', 'stimuli/instructions5.png', 'stimuli/readyletters.png', 'stimuli/readylettersnumbers.png', 'stimuli/readynumbers.png', 'stimuli/stimuli.svg', 'stimuli/task_switch_backimg.png', 'stimuli/task1.png', 'stimuli/task2.png', 'stimuli/thankyou.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = task_switching
  exportHTML = on Save
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Instruction
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize the previousTask variable
        previousTask = None
        slideN = 1
        maxSlideN = 5
        minSlideN = 1
      End Routine:
        if key_resp.keys == 'left':
            slideN -= 1
        elif key_resp.keys == 'right':
            slideN += 1
        elif key_resp.keys == 'space':
            slideN += 1
        elif key_resp.keys == 'q':
            Instruction_Loop.finished = True

        # Constrain slideN within the valid range
        if slideN < minSlideN:
            slideN = minSlideN
        elif slideN > maxSlideN:
            slideN = maxSlideN
    KeyboardComponent key_resp
      allowedKeys = 'left','right','q','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent back_img
      image = stimuli/task_switch_backimg.png
      size = (1.775,0.995)
      startVal [time (s)] = 0.0
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    ImageComponent instr_image
      image [set every repeat] = $'stimuli/instructions'+str(slideN)+'.png'
      pos = (0, -0.05)
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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  Routine NumberTask_Practice
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    ImageComponent back_img_2
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    ImageComponent grid
      image = stimuli/grid.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent NumberTask_Code
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize previous values to None for the first trial
        previousNumber = None
        previousLetter = None
      Begin Routine:
        # Define the base position
        basePos = 0.125

        # Define the possible bottom quadrants
        bottomQuadrants = [
            [-basePos, -basePos],  # Bottom-left
            [basePos, -basePos]    # Bottom-right
        ]


        def get_new_combination(previousNumber, previousLetter):
            # Shuffle the quadrants, numbers, and letters
            shuffle(bottomQuadrants)
            shuffle(number)
            shuffle(letter)

            # Ensure the new combination is different from the previous one
            newNumber = number[0]
            newLetter = letter[0]

            while newNumber == previousNumber or newLetter == previousLetter:
                shuffle(number)
                shuffle(letter)
                newNumber = number[0]
                newLetter = letter[0]

            return newNumber, newLetter

        # Example usage:
        number = ['1','2','3','4','5','6','7','8']
        letter = ['A','E','I','U','G','M','K','R']

        # Get a new combination ensuring it's different from the previous one
        number, letter = get_new_combination(previousNumber, previousLetter)

        # Randomly select a quadrant
        selectedQuadrant = bottomQuadrants[0]

        # Set the stimulus position
        stimPos = selectedQuadrant

        # Determine the correct key based on the number (since it's NumberTask_Practice)
        if int(number) % 2 == 0:  # Even number
            correctKey = 'right'
        else:  # Odd number
            correctKey = 'left'
      End Routine:
        # Store the current values for the next trial
        previousNumber = number
        previousLetter = letter
    TextComponent NumberStim
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.1
      pos [set every repeat] = stimPos
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter+str(number)
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    KeyboardComponent NumberResponse
      allowedKeys = 'left', 'right'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Feedback
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    ImageComponent back_img_3
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent FeedBack_Code
      Code Type = Auto->JS
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      Begin Routine:
        # Define the base position
        basePos = 0.125

        # Determine the error image position based on the quadrant
        if stimPos[1] > 0:  # Top quadrants
            errorImagePos = [0.125 + 0.25, basePos]
        else:  # Bottom quadrants
            errorImagePos = [-0.125 + 0.25, -basePos]

        # Check if the response was correct
        if NumberResponse.corr:
            feedbackText = '正確!'
            showErrorImage = False
        else:
            feedbackText = '錯誤!'
            showErrorImage = True

        # Control the visibility of the error image
        #if showErrorImage:
        #    ErrorImage.setAutoDraw(True)
        #else:
        #    ErrorImage.setAutoDraw(False)
    TextComponent FeedBack_NumberTask
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackText
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    ImageComponent ErrorImage
      image = stimuli/task2.png
      pos [set every repeat] = 0.5,-0.125
      size = (0.6, 0.4)
      startVal [condition] = $showErrorImage
      stopVal [time (s)] = 1.5
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  Routine Mixed_Task
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    ImageComponent back_img_4
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    ImageComponent grid_2
      image = stimuli/grid.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Presetting the variables used in Task-switching
        number = ['1','2','3','4','5','6','7','8']
        letter = ['A','E','I','U','G','M','K','R']

        # Define the base position
        basePos = 0.125

        # Define the possible quadrants
        topPositions = [
            [-basePos, basePos],  # Top-left
            [basePos, basePos]    # Top-right
        ]
        bottomPositions = [
            [-basePos, -basePos], # Bottom-left
            [basePos, -basePos]   # Bottom-right
        ]

        def get_new_combination(previousNumber, previousLetter):
            # Shuffle the quadrants, numbers, and letters
            shuffle(topPositions)
            shuffle(bottomPositions)
            shuffle(number)
            shuffle(letter)

            # Ensure the new combination is different from the previous one
            newNumber = number[0]
            newLetter = letter[0]

            while newNumber == previousNumber or newLetter == previousLetter:
                shuffle(number)
                shuffle(letter)
                newNumber = number[0]
                newLetter = letter[0]

            return newNumber, newLetter

        # Get a new combination ensuring it's different from the previous one
        number, letter = get_new_combination(previousNumber, previousLetter)

        if taskOrder == 'letter':
            selectedQuadrant = topPositions[0]
        elif taskOrder == 'number':
            selectedQuadrant = bottomPositions[0]

        # Set the stimulus position
        stimPos = selectedQuadrant

        # Determine the correct key based on the quadrant and the task
        if stimPos[1] > 0:  # Top quadrants (letter task)
            taskType = 'letter'
            if letter in ['A', 'E', 'I', 'U']:  # Vowel
                correctKey = 'right'
            else:  # Consonant
                correctKey = 'left'
        else:  # Bottom quadrants (number task)
            taskType = 'number'
            if int(number) % 2 == 0:  # Even number
                correctKey = 'right'
            else:  # Odd number
                correctKey = 'left'

        # Determine if the trial is a repeat or a switch
        if Block.thisN ==0 and trials_3.thisN == 0:
            previousTask = taskType  # Initialize on first trial
            trialType = 'first'
            RT_list=[]
            trialtypelist=[]
            tasktypelist=[]
            acc_list=[]
        else:
            if taskType == previousTask:
                trialType = 'repeat'
            else:
                trialType = 'switch'
            previousTask = taskType  # Update for next trial
      End Routine:
        thisExp.addData('taskType', taskType)
        thisExp.addData('trialType', trialType)
        RT_list.append(MixedResponse.rt)
        trialtypelist.append(trialType)
        tasktypelist.append(taskType)
        acc_list.append(MixedResponse.corr)

        # Store the current values for the next trial
        previousNumber = number
        previousLetter = letter
        previousTask = taskType
    TextComponent Task_switch_stim
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.1
      pos [set every repeat] = stimPos
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter + str(number)
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    KeyboardComponent MixedResponse
      allowedKeys = 'left','right'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine LetterTask_Practice
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    ImageComponent back_img_5
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    ImageComponent grid_3
      image = stimuli/grid.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent LetterTask_Code
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize previous values to None for the first trial
        previousNumber = None
        previousLetter = None
      Begin Routine:
        number = ['1','2','3','4','5','6','7','8']
        letter = ['A','E','I','U','G','M','K','R']
        # Define the base position
        basePos = 0.125

        # Define the possible quadrants
        quadrants = [
            [basePos, basePos],    # Top-right
            [-basePos, basePos],   # Top-left
        ]

        def get_new_combination(previousNumber, previousLetter):
            # Shuffle the quadrants, numbers, and letters
            shuffle(quadrants)
            shuffle(number)
            shuffle(letter)

            # Ensure the new combination is different from the previous one
            newNumber = number[0]
            newLetter = letter[0]

            while newNumber == previousNumber or newLetter == previousLetter:
                shuffle(number)
                shuffle(letter)
                newNumber = number[0]
                newLetter = letter[0]

            return newNumber, newLetter

        # Get a new combination ensuring it's different from the previous one
        number, letter = get_new_combination(previousNumber, previousLetter)

        # Randomly select a quadrant
        selectedQuadrant = quadrants[0]

        # Set the stimulus position
        stimPos = selectedQuadrant

        # Determine the correct key based on the quadrant and the task
        if stimPos[1] > 0:  # Top quadrants (letter task)
            if letter in ['A', 'E', 'I', 'U']:  # Vowel
                correctKey = 'right'
            else:  # Consonant
                correctKey = 'left'
    TextComponent LetterStim
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.1
      pos [set every repeat] = stimPos
      startVal [time (s)] = 0.0
      text [set every repeat] = $letter+str(number)
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    KeyboardComponent LetterResponse
      allowedKeys = 'left', 'right'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine ReadyNumbers
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    ImageComponent back_img_6
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    ImageComponent Instr_numbers_Only
      image = stimuli/readynumbers.png
      pos = (0, -0.05)
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ReadyLetters
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    ImageComponent back_img_7
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    ImageComponent Readyletter_img
      image = stimuli/readyletters.png
      pos = (0, -0.05)
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Letter_Feedback
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    ImageComponent back_img_8
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent FeedBack_Code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Define the base position
        basePos = 0.125

        # Determine the error image position based on the quadrant
        if stimPos[1] > 0:  # Top quadrants
            errorImagePos = [0.125 + 0.35, basePos]
        else:  # Bottom quadrants
            errorImagePos = [-0.125 + 0.35, -basePos]

        # Check if the response was correct
        if LetterResponse.corr:
            feedbackText = '正確!'
            showErrorImage = False
        else:
            feedbackText = '錯誤!'
            showErrorImage = True

        # Control the visibility of the error image
        #if showErrorImage:
        #    ErrorImage.setAutoDraw(True)
        #else:
        #    ErrorImage.setAutoDraw(False)
    TextComponent FeedBack_LetterTask
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedbackText
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    ImageComponent ErrorImage_2
      image = stimuli/task1.png
      pos = 0.5,0.125
      size = (0.5, 0.4)
      startVal [condition] = $showErrorImage
      stopVal [time (s)] = 2
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  Routine ReadyMixed
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    ImageComponent back_img_9
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    ImageComponent ReadyMix_img
      image = stimuli/readylettersnumbers.png
      pos = (0, -0.05)
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Mixed_Feedback
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    ImageComponent back_img_10
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent FeedBack_Code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Define the base position
        basePos = 0.125

        # Determine the error image position based on the quadrant
        if stimPos[1] > 0:  # Top quadrants
            errorImagePos = [0.125 + 0.35, basePos]
            errorimgpth = 'stimuli/task1.png'
        else:  # Bottom quadrants
            errorImagePos = [0.125 + 0.35, -basePos]
            errorimgpth = 'stimuli/task2.png'


        # Check if the response was correct
        if MixedResponse.corr:
            feedbackText = '正確!'
            showErrorImage = False
        else:
            feedbackText = '錯誤!'
            showErrorImage = True



        # Control the visibility of the error image
        #if showErrorImage:
        #    ErrorImage.setAutoDraw(True)
        #else:
        #    ErrorImage.setAutoDraw(False)
    TextComponent FeedBack_LetterTask_2
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedbackText
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    ImageComponent ErrorImage_3
      image [set every repeat] = $errorimgpth
      pos [set every repeat] = errorImagePos
      size = (0.5, 0.4)
      startVal [condition] = $showErrorImage
      stopVal [time (s)] = 2
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  Routine reset_Mixed
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize global variables
        previousTask = None
        trialCounter = 0
        switchInterval = randint(3, 5)

        if Block.thisN % 2 ==0:
            taskOrder = 'letter'
        elif Block.thisN %2 ==1:
            taskOrder = 'number'
  Routine end
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    ImageComponent back_img_11
      image = stimuli/task_switch_backimg.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        // Provided arrays
        let RT_array = RT_list;
        let trialarray = trialtypelist;
        let taskarray = tasktypelist;
        let acc_array = acc_list;

        // Initialize variables
        let repeat_rts = [];
        let switch_rts = [];
        let repeat_correct = 0;
        let switch_correct = 0;
        let repeat_total = 0;
        let switch_total = 0;

        // Calculate metrics based on trial type and correctness
        for (let i = 0; i < trialarray.length; i++) {
            if (acc_array[i] === 1) {  // Only include correct trials
                if (trialarray[i] === "repeat") {
                    repeat_rts.push(RT_array[i]);
                    repeat_correct += 1;
                    repeat_total += 1;
                } else if (trialarray[i] === "switch") {
                    switch_rts.push(RT_array[i]);
                    switch_correct += 1;
                    switch_total += 1;
                }
            } else {
                if (trialarray[i] === "repeat") {
                    repeat_total += 1;
                } else if (trialarray[i] === "switch") {
                    switch_total += 1;
                }
            }
        }

        // Calculate means for correct trials only and convert to milliseconds
        let mean_repeat_rt = (repeat_rts.length > 0) ? (repeat_rts.reduce((a, b) => a + b, 0) / repeat_rts.length) * 1000 : 0;
        let mean_switch_rt = (switch_rts.length > 0) ? (switch_rts.reduce((a, b) => a + b, 0) / switch_rts.length) * 1000 : 0;

        // Calculate accuracy
        let repeat_accuracy = (repeat_total > 0) ? ((repeat_correct / repeat_total) * 100) : 0;
        let switch_accuracy = (switch_total > 0) ? ((switch_correct / switch_total) * 100) : 0;

        // Calculate switch cost based on correct trials and convert to milliseconds
        let switch_cost = (mean_switch_rt - mean_repeat_rt);

        // Store metrics in the experiment
        psychoJS.experiment.addData('mean_repeat_rt', mean_repeat_rt);
        psychoJS.experiment.addData('mean_switch_rt', mean_switch_rt);
        psychoJS.experiment.addData('repeat_accuracy', repeat_accuracy);
        psychoJS.experiment.addData('switch_accuracy', switch_accuracy);
        psychoJS.experiment.addData('switch_cost', switch_cost);

        // Combine metrics into one text component
        let performance_report_text = `重複試驗平均反應時間: ${mean_repeat_rt.toFixed(2)} 毫秒\n\n` +
                                      `切換試驗平均反應時間: ${mean_switch_rt.toFixed(2)} 毫秒\n\n` +
                                      `重複試驗正確率: ${repeat_accuracy.toFixed(2)}%\n\n` +
                                      `切換試驗正確率: ${switch_accuracy.toFixed(2)}%\n\n` +
                                      `切換成本: ${switch_cost.toFixed(2)} 毫秒`;
      Begin Routine:
        # Provided arrays
        RT_array = np.array(RT_list)
        trialarray = np.array(trialtypelist)
        taskarray = np.array(tasktypelist)
        acc_array = np.array(acc_list)

        # Initialize variables
        repeat_rts = []
        switch_rts = []
        repeat_correct = 0
        switch_correct = 0
        repeat_total = 0
        switch_total = 0

        # Calculate metrics based on trial type
        for i in range(len(trialarray)):
            if trialarray[i] == 'repeat':
                repeat_rts.append(RT_array[i])
                repeat_correct += acc_array[i]
                repeat_total += 1
            elif trialarray[i] == 'switch':
                switch_rts.append(RT_array[i])
                switch_correct += acc_array[i]
                switch_total += 1

        # Calculate means
        mean_repeat_rt = np.mean(repeat_rts) if len(repeat_rts) > 0 else 0
        mean_switch_rt = np.mean(switch_rts) if len(switch_rts) > 0 else 0

        # Calculate accuracy
        repeat_accuracy = (repeat_correct / repeat_total) * 100 if repeat_total > 0 else 0
        switch_accuracy = (switch_correct / switch_total) * 100 if switch_total > 0 else 0

        # Calculate switch cost
        switch_cost = mean_switch_rt - mean_repeat_rt

        # Store metrics in the experiment
        thisExp.addData('mean_repeat_rt', mean_repeat_rt)
        thisExp.addData('mean_switch_rt', mean_switch_rt)
        thisExp.addData('repeat_accuracy', repeat_accuracy)
        thisExp.addData('switch_accuracy', switch_accuracy)
        thisExp.addData('switch_cost', switch_cost)

        # Store metrics in variables for display in traditional Chinese
        # Combine metrics into one text component
        performance_report_text = (
            f"重複試驗平均反應時間: {mean_repeat_rt:.2f} 秒\n\n"
            f"切換試驗平均反應時間: {mean_switch_rt:.2f} 秒\n\n"
            f"重複試驗正確率: {repeat_accuracy:.2f}%\n\n"
            f"切換試驗正確率: {switch_accuracy:.2f}%\n\n"
            f"切換成本: {switch_cost:.2f} 秒"
        )
    TextComponent Thank_you
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.05
      pos [set every repeat] = (0,0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $performance_report_text
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  Routine Intro
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = stimuli/opening.mp4
      size = (1.789, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent Left_Rectangle
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity = 0
      pos = (-0.5, 0)
      shape = rectangle
      size = (1,2)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent Right_Rectangle
      fillColor = 1.0000, 0.7882, 0.5373
      lineColor = 1.0000, 0.7882, 0.5373
      opacity = 0
      pos = (0.5, 0)
      shape = rectangle
      size = (1,2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent Left_Click
      clickable = Left_Rectangle
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    MouseComponent Right_Click
      clickable = Right_Rectangle
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent endKey
      allowedKeys = 'left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  LoopInitiator Instruction_Loop loopType="TrialHandler"
    loopType = sequential
    nReps = 1000
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    Routine Instruction
  LoopTerminator Instruction_Loop
  Routine ReadyNumbers
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine NumberTask_Practice
    Routine Feedback
  LoopTerminator trials
  Routine ReadyLetters
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine LetterTask_Practice
    Routine Letter_Feedback
  LoopTerminator trials_2
  Routine ReadyMixed
  LoopInitiator Block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 6
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    Routine reset_Mixed
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = sequential
      nReps = switchInterval
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      Routine Mixed_Task
      Routine Mixed_Feedback
    LoopTerminator trials_3
  LoopTerminator Block
  Routine end
